PsychoPy2experiment version="2021.1.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['group'])
  Experiment info = {'participant': '', 'group': '', '# of reps': '5'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[.4,.4,.4]
  expName = DSP_Behavioral_Only_Encoding
  logging level = debug
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Routines
  Routine Control_1
    CodeComponent Control_1_same_different_code
      Code Type = Auto->JS
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      Begin Routine:
        componentStop = False
        event.clearEvents(eventType = 'keyboard')
      Each Frame:
        if (Control_1_resp.keys is not None and len(Control_1_resp.keys) > 0 and t > 66) or t >= 76:
            componentStop = True
    TextComponent Control_1_instruction
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Color Video!

        Do the first and last balls match?
    TextComponent Control_1_3
      color = black
      letterHeight = .075
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Control_1_2
      color = black
      letterHeight = .075
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Control_1_1
      color = black
      letterHeight = .075
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 1
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    MovieComponent Control_1_video
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $video_file
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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    KeyboardComponent Control_1_resp
      allowedKeys [set every repeat] = 'y', 'b'
      forceEndRoutine = False
      startVal [time (s)] = 66
      stopVal [duration (s)] = 10
      store = first key
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    TextComponent Control_1_same_different_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 66
      stopVal [condition] = $componentStop
      text = Same or different color?
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    TextComponent Control_1_resp_recorded_text
      color = black
      letterHeight = 0.075
      startVal [condition] = $componentStop
      stopVal [time (s)] = 76
      text = Response recorded!
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    PolygonComponent Control_1_fixation_horz
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 76
      stopVal [duration (s)] = 15
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    PolygonComponent Control_1_fixation_vert
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 76
      stopVal [duration (s)] = 15
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  Routine Control_2
    CodeComponent Control_2_same_different_code
      Code Type = Auto->JS
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      Begin Routine:
        componentStop = False
        event.clearEvents(eventType = 'keyboard')
      Each Frame:
        if (Control_2_resp.keys is not None and len(Control_2_resp.keys) > 0 and t > 66) or t >= 76:
            componentStop = True
    TextComponent Control_2_instruction
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Color Video!

        Do the first and last balls match?
    TextComponent Control_2_3
      color = black
      letterHeight = .075
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Control_2_2
      color = black
      letterHeight = .075
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Control_2_1
      color = black
      letterHeight = .075
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 1
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    MovieComponent Control_2_video
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $video_file
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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    KeyboardComponent Control_2_resp
      allowedKeys [set every repeat] = 'y', 'b'
      forceEndRoutine = False
      startVal [time (s)] = 66
      stopVal [duration (s)] = 10
      store = first key
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    TextComponent Control_2_same_different_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 66
      stopVal [condition] = $componentStop
      text = Same or different color?
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    TextComponent Control_2_resp_recorded_text
      color = black
      letterHeight = 0.075
      startVal [condition] = $componentStop
      stopVal [time (s)] = 76
      text = Response recorded!
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    PolygonComponent Control_2_fixation_horz
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 76
      stopVal [duration (s)] = 15
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    PolygonComponent Control_2_fixation_vert
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 76
      stopVal [duration (s)] = 15
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  Routine Alignment
    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if expInfo['run'] > '1':
            continueRoutine = False
    PolygonComponent Alignment_background
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent Alignment_image
      image = Alignment.png
      size = [1.4,1]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent Alignment_resp
      allowedKeys = 'return', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Button_check
    TextComponent Button_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Button check.
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  Routine Index
    TextComponent Index_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      text = Press the button under your index finger.
      wrapWidth = 1.5
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    KeyboardComponent Index_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Middle
    TextComponent Middle_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      text = Press the button under your middle finger.
      wrapWidth = 1.5
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    KeyboardComponent Middle_resp
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ring
    TextComponent Ring_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      text = Press the button under your ring finger.
      wrapWidth = 1.5
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    KeyboardComponent Ring_resp
      allowedKeys = 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pinky
    TextComponent Pinky_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      text = Press the button under your pinky finger.
      wrapWidth = 1.5
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    KeyboardComponent Pinky_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Repeat
    CodeComponent Repeat_code
      Code Type = Auto->JS
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      End Routine:
        if Repeat_resp.keys == 'n':
            Button.finished = True
    TextComponent Repeat_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Repeat button check?

        Experimenter: Press Y or N.
    KeyboardComponent Repeat_resp
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Ready_scanner
    TextComponent Ready_scanner_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = Waiting for the scanner…
      wrapWidth = 1.5
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    KeyboardComponent Ready_scanner_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ready_experimenter
    TextComponent Ready_experimenter_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = Waiting for the experimenter…
      wrapWidth = 1.5
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    KeyboardComponent Ready_experimenter_resp
      allowedKeys = 'enter', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent Hide_mouse
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
  Routine Done
    CodeComponent Toc
      Code Type = Auto->JS
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      Begin Routine:
        toc_final = time()
        thisExp.addData("main_task_end", toc_final)
        thisExp.addData("real_timestamp_main_task_end", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
        thisExp.addData("main_task_duration", (toc_final - tic_initial))
    TextComponent Done_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = Done!
      wrapWidth = 1.5
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    KeyboardComponent Done_resp
      allowedKeys = 'enter', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Setup
  Routine Middle_2
    TextComponent Index_text_2
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      text = Press the button under your index finger.
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    KeyboardComponent Index_resp_2
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stim_stuff
    CodeComponent Learning_code
      Code Type = Py
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      Begin Experiment:
        if expInfo['group'] == 'alt':
            learning = './DSP_Videos/Learning/Learning_Alternate.mp4'
        elif expInfo['group'] == 'nor':
            learning = './DSP_Videos/Learning/Learning_Normal.mp4'

        nreps = int(expInfo['# of reps'])-1
    CodeComponent Tic
      Code Type = Auto->JS
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      Begin Experiment:
        from time import time
        import datetime
      End Routine:
        tic_initial = time()
        thisExp.addData("main_task_start", tic_initial)
        thisExp.addData("real_timestamp_main_task_start", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
  Routine Learning_2_5
    CodeComponent Learning_2_5_trial_time
      Code Type = Py
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      Begin Routine:
        tic = time()
        thisExp.addData("trial_2_5_start", tic)
        thisExp.addData("real_timestamp_trial_2_5_start", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
      End Routine:
        toc = time()
        thisExp.addData("trial_2_5_end", toc)
        thisExp.addData("real_timestamp_trial_2_5_end", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
        thisExp.addData("trial_2_5_duration", (toc - tic))
    TextComponent Learning_2_5_instruction
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.0
      wrapWidth = 1.5
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      text:
        Spatial Video!

        Learn the layout.
    TextComponent Learning_2_5_3
      color = black
      letterHeight = .075
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Learning_2_5_2
      color = black
      letterHeight = .075
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Learning_2_5_1
      color = black
      letterHeight = .075
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 1
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    MovieComponent Learning_2_5_video
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $learning
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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    CodeComponent Learning_2_5_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('learning_2_5_video_file', learning)
  Routine Learning_1
    CodeComponent Learning_1_trial_time
      Code Type = Py
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      Begin Routine:
        tic = time()
        thisExp.addData("trial_1_start", tic)
        thisExp.addData("real_timestamp_trial_1_start", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
      End Routine:
        toc = time()
        thisExp.addData("trial_1_end", toc)
        thisExp.addData("real_timestamp_trial_1_end", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
        thisExp.addData("trial_1_duration", (toc - tic))
    TextComponent Learning_1_instruction
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.0
      wrapWidth = 1.5
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      text:
        Spatial Video!

        Learn the layout.
    TextComponent Learning_1_3
      color = black
      letterHeight = .075
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Learning_1_2
      color = black
      letterHeight = .075
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Learning_1_1
      color = black
      letterHeight = .075
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 1
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    MovieComponent Learning_1_video
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = $learning
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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    CodeComponent Learning_1_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('learning_1_video_file1', learning)
Flow
  Routine Ready_experimenter
  Routine Stim_stuff
  Routine Learning_1
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = nreps
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    Routine Learning_2_5
  LoopTerminator trials
  Routine Done
