PsychoPy2experiment version="2021.1.3"
Settings
  Data filename = u'data/%s_%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['run'], expInfo['group'], expInfo['version'])
  Experiment info = {'participant': '', 'run': '', 'group': '', 'version': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[.4,.4,.4]
  expName = DSP_Bold
  logging level = debug
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Routines
  Routine Control_1
    CodeComponent Control_1_same_different_code
      Code Type = Auto->JS
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      Begin Routine:
        componentStop = False
        event.clearEvents(eventType = 'keyboard')
      Each Frame:
        if (Control_1_resp.keys is not None and len(Control_1_resp.keys) > 0 and t > 66) or t >= 76:
            componentStop = True
    CodeComponent Control_1_time
      Code Type = Py
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      Begin Routine:
        tic_control_1 = time()
        thisExp.addData("control_1_start", tic_control_1)
        thisExp.addData("real_timestamp_control_1_start", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
      End Routine:
        toc_control_1 = time()
        thisExp.addData("control_1_end", toc_control_1)
        thisExp.addData("real_timestamp_control_1_end", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
        thisExp.addData("control_1_duration", (toc_control_1 - tic_control_1))
    TextComponent Control_1_instruction
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Color Video!

        Do the first and last balls match?
    TextComponent Control_1_3
      color = black
      letterHeight = .075
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Control_1_2
      color = black
      letterHeight = .075
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Control_1_1
      color = black
      letterHeight = .075
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 1
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    MovieComponent Control_1_video
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $video_file
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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    KeyboardComponent Control_1_resp
      allowedKeys [set every repeat] = 'y', 'b'
      forceEndRoutine = False
      startVal [time (s)] = 66
      stopVal [duration (s)] = 10
      store = first key
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    TextComponent Control_1_same_different_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 66
      stopVal [condition] = $componentStop
      text = Same or different color?
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    TextComponent Control_1_resp_recorded_text
      color = black
      letterHeight = 0.075
      startVal [condition] = $componentStop
      stopVal [time (s)] = 76
      text = Response recorded!
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    PolygonComponent Control_1_fixation_horz
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 76
      stopVal [duration (s)] = 15
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    PolygonComponent Control_1_fixation_vert
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 76
      stopVal [duration (s)] = 15
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  Routine Control_2
    CodeComponent Control_2_same_different_code
      Code Type = Auto->JS
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      Begin Routine:
        componentStop = False
        event.clearEvents(eventType = 'keyboard')
      Each Frame:
        if (Control_2_resp.keys is not None and len(Control_2_resp.keys) > 0 and t > 66) or t >= 76:
            componentStop = True
    CodeComponent Control_2_time
      Code Type = Py
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      Begin Routine:
        tic_control_2 = time()
        thisExp.addData("control_2_start", tic_control_2)
        thisExp.addData("real_timestamp_control_2_start", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
      End Routine:
        toc_control_2 = time()
        thisExp.addData("control_2_end", toc_control_2)
        thisExp.addData("real_timestamp_control_2_end", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
        thisExp.addData("control_2_duration", (toc_control_2 - tic_control_2))
    TextComponent Control_2_instruction
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Color Video!

        Do the first and last balls match?
    TextComponent Control_2_3
      color = black
      letterHeight = .075
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Control_2_2
      color = black
      letterHeight = .075
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Control_2_1
      color = black
      letterHeight = .075
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 1
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    MovieComponent Control_2_video
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $video_file
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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    KeyboardComponent Control_2_resp
      allowedKeys [set every repeat] = 'y', 'b'
      forceEndRoutine = False
      startVal [time (s)] = 66
      stopVal [duration (s)] = 10
      store = first key
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    TextComponent Control_2_same_different_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 66
      stopVal [condition] = $componentStop
      text = Same or different color?
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    TextComponent Control_2_resp_recorded_text
      color = black
      letterHeight = 0.075
      startVal [condition] = $componentStop
      stopVal [time (s)] = 76
      text = Response recorded!
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    PolygonComponent Control_2_fixation_horz
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 76
      stopVal [duration (s)] = 15
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    PolygonComponent Control_2_fixation_vert
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 76
      stopVal [duration (s)] = 15
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  Routine Learning_1
    CodeComponent Learning_1_time
      Code Type = Py
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      Begin Routine:
        tic_learning_1 = time()
        thisExp.addData("Learning_1_start", tic_learning_1)
        thisExp.addData("real_timestamp_learning_1_start", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
      End Routine:
        toc_learning_1 = time()
        thisExp.addData("learning_1_end", toc_learning_1)
        thisExp.addData("real_timestamp_learning_1_end", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
        thisExp.addData("learning_1_duration", (toc_learning_1 - tic_learning_1))
    TextComponent Learning_1_instruction
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.0
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      text:
        Spatial Video!

        Learn the layout.
    TextComponent Learning_1_3
      color = black
      letterHeight = .075
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Learning_1_2
      color = black
      letterHeight = .075
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Learning_1_1
      color = black
      letterHeight = .075
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 1
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    MovieComponent Learning_1_video
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = $learning
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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    PolygonComponent Learning_1_fixation_horz
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 66
      stopVal [duration (s)] = 15
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    PolygonComponent Learning_1_fixation_vert
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 66
      stopVal [duration (s)] = 15
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    CodeComponent Learning_1_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('learning_video_file_1', learning)
  Routine Learning_2
    CodeComponent Learning_2_time
      Code Type = Py
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      Begin Routine:
        tic_learning_2 = time()
        thisExp.addData("Learning_2_start", tic_learning_2)
        thisExp.addData("real_timestamp_learning_2_start", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
      End Routine:
        toc_learning_2 = time()
        thisExp.addData("learning_2_end", toc_learning_2)
        thisExp.addData("real_timestamp_learning_2_end", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
        thisExp.addData("learning_2_duration", (toc_learning_2 - tic_learning_2))
    TextComponent Learning_2_instruction
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Spatial Video!

        Learn the layout.
    TextComponent Learning_2_3
      color = black
      letterHeight = .075
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Learning_2_2
      color = black
      letterHeight = .075
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Learning_2_1
      color = black
      letterHeight = .075
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 1
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    MovieComponent Learning_2_video
      backend = moviepy
      forceEndRoutine = False
      movie = $learning
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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    PolygonComponent Learning_2_fixation_horz
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 66
      stopVal [duration (s)] = 15
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    PolygonComponent Learning_2_fixation_vert
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 66
      stopVal [duration (s)] = 15
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    CodeComponent Learning_2_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('learning_video_file_2', learning)
  Routine Learning_3
    CodeComponent Learning_3_time
      Code Type = Py
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      Begin Routine:
        tic_learning_3 = time()
        thisExp.addData("Learning_3_start", tic_learning_3)
        thisExp.addData("real_timestamp_learning_3_start", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
      End Routine:
        toc_learning_3 = time()
        thisExp.addData("learning_3_end", toc_learning_3)
        thisExp.addData("real_timestamp_learning_3_end", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
        thisExp.addData("learning_3_duration", (toc_learning_3 - tic_learning_3))
    TextComponent Learning_3_instruction
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Spatial Video!

        Learn the layout.
    TextComponent Learning_3_3
      color = black
      letterHeight = .075
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent Learning_3_2
      color = black
      letterHeight = .075
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent Learning_3_1
      color = black
      letterHeight = .075
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 1
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    MovieComponent Learning_3_video
      backend = moviepy
      forceEndRoutine = False
      movie = $learning
      startVal [time (s)] = 6
      stopVal [duration (s)] = 60
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    PolygonComponent Learning_3_fixation_horz
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 66
      stopVal [duration (s)] = 15
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    PolygonComponent Learning_3_fixation_vert
      fillColor = $[1,1,1]
      lineColor = black
      lineWidth = 5
      ori = 90
      shape = line
      size = (0.075, 0)
      startVal [time (s)] = 66
      stopVal [duration (s)] = 15
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    CodeComponent Learning_3_code
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('learning_video_file_3', learning)
  Routine Alignment
    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if expInfo['run'] > '1':
            continueRoutine = False
    PolygonComponent Alignment_background
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
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    ImageComponent Alignment_image
      image = Alignment.png
      size = [1.4,1]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent Alignment_resp
      allowedKeys = 'return', 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Button_check
    TextComponent Button_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Button check.
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  Routine Index
    TextComponent Index_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      text = Press the button under your index finger.
      wrapWidth = 1.5
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    KeyboardComponent Index_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Middle
    TextComponent Middle_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      text = Press the button under your middle finger.
      wrapWidth = 1.5
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    KeyboardComponent Middle_resp
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ring
    TextComponent Ring_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      text = Press the button under your ring finger.
      wrapWidth = 1.5
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    KeyboardComponent Ring_resp
      allowedKeys = 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pinky
    TextComponent Pinky_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      text = Press the button under your pinky finger.
      wrapWidth = 1.5
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    KeyboardComponent Pinky_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Repeat
    CodeComponent Repeat_code
      Code Type = Auto->JS
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      End Routine:
        if Repeat_resp.keys == 'n':
            Button.finished = True
    TextComponent Repeat_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Repeat button check?

        Experimenter: Press Y or N.
    KeyboardComponent Repeat_resp
      allowedKeys = 'y','n'
      correctAns = y
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Ready_scanner
    CodeComponent Tic_2
      Code Type = Auto->JS
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      Begin Experiment:
        from time import time
        import datetime
      End Routine:
        tic = time()
        thisExp.addData("main_task_start", tic)
        thisExp.addData("real_timestamp_main_task_start", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
    TextComponent Ready_scanner_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = Waiting for the scanner…
      wrapWidth = 1.5
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    KeyboardComponent Ready_scanner_resp
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ready_experimenter
    TextComponent Ready_experimenter_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = Waiting for the experimenter…
      wrapWidth = 1.5
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    KeyboardComponent Ready_experimenter_resp
      allowedKeys = 'enter', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent Hide_mouse
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
  Routine Done
    CodeComponent Toc_2
      Code Type = Auto->JS
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      Begin Routine:
        toc = time()
        thisExp.addData("main_task_end", toc)
        thisExp.addData("real_timestamp_main_task_end", datetime.datetime.today().strftime('%Y-%m-%d-%H:%M:%S.%f'))
        thisExp.addData("main_task_duration", (toc - tic))
    TextComponent Done_text
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = Done!
      wrapWidth = 1.5
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    KeyboardComponent Done_resp
      allowedKeys = 'enter', 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Setup
  Routine Middle_2
    TextComponent Index_text_2
      color = black
      letterHeight = 0.075
      startVal [time (s)] = 0
      text = Press the button under your index finger.
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    KeyboardComponent Index_resp_2
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stim_stuff
    CodeComponent Learning_code
      Code Type = Py
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      Begin Experiment:
        if expInfo['group'] == 'alt':
            learning = './DSP_Videos/Learning/Learning_Alternate.mp4'
        elif expInfo['group'] == 'nor':
            learning = './DSP_Videos/Learning/Learning_Normal.mp4'
    CodeComponent Control_code
      Code Type = Auto->JS
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      Begin Experiment:
        import xlrd

        if expInfo['group'] == 'alt' and expInfo['version'] == 'A':
            control_1 = 'Control_Alternate_A.xlsx'
            control_2 = 'Control_Alternate_A.xlsx'
        elif expInfo['group'] == 'alt' and expInfo['version'] == 'B':
            control_1 = 'Control_Alternate_B.xlsx'
            control_2 = 'Control_Alternate_B.xlsx'
        elif expInfo['group'] == 'alt' and expInfo['version'] == 'C':
            control_1 = 'Control_Alternate_C.xlsx'
            control_2 = 'Control_Alternate_C.xlsx'
        elif expInfo['group'] == 'alt' and expInfo['version'] == 'D':
            control_1 = 'Control_Alternate_D.xlsx'
            control_2 = 'Control_Alternate_D.xlsx'
        elif expInfo['group'] == 'nor' and expInfo['version'] == 'A':
            control_1 = 'Control_Normal_A.xlsx'
            control_2 = 'Control_Normal_A.xlsx'
        elif expInfo['group'] == 'nor' and expInfo['version'] == 'B':
            control_1 = 'Control_Normal_B.xlsx'
            control_2 = 'Control_Normal_B.xlsx'
        elif expInfo['group'] == 'nor' and expInfo['version'] == 'C':
            control_1 = 'Control_Normal_C.xlsx'
            control_2 = 'Control_Normal_C.xlsx'
        elif expInfo['group'] == 'nor' and expInfo['version'] == 'D':
            control_1 = 'Control_Normal_D.xlsx'
            control_2 = 'Control_Normal_D.xlsx'

        if expInfo['run'] == '1':
            row_1 = '0'
            row_2 = '1'
        elif expInfo['run'] == '2':
            row_1 = '2'
            row_2 = '3'
        elif expInfo['run'] == '3':
            row_1 = '4'
            row_2 = '5'
        elif expInfo['run'] == '4':
            row_1 = '6'
            row_2 = '7'
Flow
  Routine Ready_experimenter
  Routine Alignment
  LoopInitiator Button loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Button_check
    Routine Index
    Routine Middle
    Routine Repeat
  LoopTerminator Button
  Routine Stim_stuff
  Routine Ready_scanner
  Routine Learning_1
  LoopInitiator Control_1_loop loopType="TrialHandler"
    Selected rows = $row_1
    conditionsFile = $control_1
    loopType = sequential
    nReps = 1
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    Routine Control_1
  LoopTerminator Control_1_loop
  Routine Learning_2
  LoopInitiator Control_2_loop loopType="TrialHandler"
    Selected rows = $row_2
    conditionsFile = $control_2
    loopType = sequential
    nReps = 1
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    Routine Control_2
  LoopTerminator Control_2_loop
  Routine Learning_3
  Routine Done
